PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = Experimento
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Routines
  Routine Instrucciones
    TextComponent Presentacion
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [time (s)] = 0
      stopVal [condition] = event.getKeys(['space'])
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      text [set every repeat]:
        $"""Hola! Apareceran dos productos de supermercado durante """ + str(changuito_time_to_show)  + """ segundos. Vas a tener que responder cúal de los dos productos es más CARO.

        Cuando aparezca la pregunta “cuál es más CARO?”, presioná la flechita izquierda o derecha, indicando qué producto es más CARO.

        Solo se puede responder cuando aparece la pregunta.

        - Barra espaciadora para continuar - """
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        screen_pos = (0.5, 0)
  Routine JuegoColores
    TextComponent Juego
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $(screen_pos[0],screen_pos[1]  + 0.4) 
      startVal [time (s)] = 0.0
      stopVal [condition] = event.getKeys(['space'])
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      text:
        Puede que en algún momento te toque realizar la tarea 2-Back con colores:

        En el medio de la pantalla aparecerán, de uno en uno, cuadraditos de colores.
        - Si apareció el mismo color 2 POSICIONES ATRAS, presioná “enter”.
        - Sino, no apretes nada

        Vamos a hacer una prueba de esta tarea.

        - Barra espaciadora para continuar -
    ImageComponent image_6
      image = ./2BackColores.png
      pos = (0, -0.5)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [condition] = $Juego.status==FINISHED
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  Routine Inmediato
    TextComponent text
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [time (s)] = 0.5
      stopVal [condition] = event.getKeys(['space'])
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      text:
        Recordatorios:
        - Elegi el producto MÁS CARO.
        - Solo podes responder cuando aparezca la pregunta.
        - A veces te puede tocar hacer el juego de los colores (presioná "enter" cuando aparezca el mismo color que se mostró dos posiciones antes)

        - Barra espaciadora para continuar -
    ImageComponent image
      image [set every repeat] = $imagen
      size = (1, 1)
      startVal [condition] = $text.status==FINISHED
      stopVal [duration (s)] = $changuito_time_to_show
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    KeyboardComponent respuesta_inmediato
      allowedKeys = 'left','right'
      correctAns = $correcta
      discard previous = False
      forceEndRoutine = True
      startVal [condition] = $image.status==FINISHED
      storeCorrect = True
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    TextComponent pregunta_cual_es_el_mas_barato
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [condition] = $image.status==FINISHED
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      text:
        Cual es el más CARO?
        flechita IZQ o DER
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        event.clearEvents()
    ImageComponent short_stim1
      image [set every repeat] = $imagen
      pos = (0, 0.5)
      size = (0.3, 0.3)
      startVal [condition] = $image.status==FINISHED
      stopVal [duration (s)] = $time_to_show_tiny_stimulus
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  Routine Consciente
    TextComponent hola
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [time (s)] = 0
      stopVal [condition] = event.getKeys(['space'])
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      text [set every repeat]:
        Recordatorios:
        - Elegi el producto MÁS CARO.
        - Solo podes responder cuando aparezca la pregunta.
        - A veces te puede tocar hacer el juego de los colores (presioná "enter" cuando aparezca el mismo color que se mostró dos posiciones antes)

        - Barra espaciadora para continuar -
    ImageComponent image_2
      image [set every repeat] = $imagen
      size = (1, 1)
      startVal [condition] = $hola.status==FINISHED
      stopVal [duration (s)] = $changuito_time_to_show
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    TextComponent tiempo_para_pensar
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [condition] = $image_2.status==FINISHED
      stopVal [duration (s)] = $time_to_think
      text = Tiempo Para Pensar
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    KeyboardComponent respuesta_consciente
      allowedKeys = 'left','right'
      correctAns = $correcta
      forceEndRoutine = True
      startVal [condition] = $tiempo_para_pensar.status==FINISHED
      storeCorrect = True
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    TextComponent cual_es_la_mas_barata
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [condition] = $tiempo_para_pensar.status==FINISHED
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      text:
        Cual es el más CARO?
        flechita IZQ o DER
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        event.clearEvents()
    ImageComponent image_4
      image [set every repeat] = $imagen
      pos = (0, 0.5)
      size = (0.3, 0.3)
      startVal [condition] = $tiempo_para_pensar.status==FINISHED
      stopVal [duration (s)] = $time_to_show_tiny_stimulus
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  Routine Inconsciente
    TextComponent holi
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [time (s)] = 0.0
      stopVal [condition] = event.getKeys(['space'])
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      text:
        Recordatorios:
        - Elegi el producto MÁS CARO.
        - Solo podes responder cuando aparezca la pregunta.
        - A veces te puede tocar hacer el juego de los colores (presioná "enter" cuando aparezca el mismo color que se mostró dos posiciones antes)

        - Barra espaciadora para continuar -
    ImageComponent image_3
      image [set every repeat] = $imagen
      size = (1, 1)
      startVal [condition] = $holi.status==FINISHED
      stopVal [duration (s)] = $changuito_time_to_show
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        event.clearEvents()
      Each Frame:
        if image_3.status == FINISHED:
            start_nback = globalClock.getTime()
  Routine Test
    TextComponent gracias
      durationEstim = 5
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [time (s)] = 0.0
      stopVal [condition] = event.getKeys(['space'])
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      text:
        Gracias por participar!

        Por último, te vamos a hacer una breve encuesta.

        - Barra espaciadora para continuar -
    KeyboardComponent respuesta1
      allowedKeys = '0','1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startEstim = 5
      startVal [condition] = $gracias.status==FINISHED
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    TextComponent pregunta1
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startEstim = 5
      startVal [condition] = $gracias.status==FINISHED
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      text:
        Cuántas veces fuiste al supermercado en la última semana?

        Presioná un número del 0 al 9.
  Routine Rango
    KeyboardComponent respuesta2_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent pregunta2_2
      font = consolas
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0
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      text:
        Qué producto es más BARATO?

        (IZQ o DER)
    ImageComponent imagencon2productos_2
      image = ./productotest.png.jpg
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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  Routine Test_price
    KeyboardComponent respuesta3bis_3
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent pregunta3_3
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $(screen_pos[0],screen_pos[1]  - 0.6) 
      startVal [time (s)] = 0
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      text:
        En qué rango de precios se encuentra este producto?

        Presioná "a", "b" o "c".
    ImageComponent productoCon3RANGOSabc_3
      image = ./rangos.jpg
      pos = (0, 0.2)
      size = (0.3*1.3, 0.95*1.3)
      startVal [time (s)] = 0
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  Routine N_back
    PolygonComponent polygon
      fillColor [set every repeat] = $colourtest
      lineColor [set every repeat] = $colourtest
      lineWidth [set every repeat] = 1
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (0.20,0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $nback_stimulus_time
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    KeyboardComponent nback_train_resp
      allowedKeys = 'return'
      correctAns = $corresp
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      store = all keys
      storeCorrect = True
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  Routine nback_real
    PolygonComponent polygon_2
      fillColor [set every repeat] = $colourtest
      lineColor [set every repeat] = $colourtest
      lineWidth [set every repeat] = 1
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (0.20,0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $nback_stimulus_time
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    KeyboardComponent nback_train_resp_2
      allowedKeys = 'return'
      correctAns = $corresp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = all keys
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Each Frame:
        if globalClock.getTime() - start_nback >= time_to_play:
            trials.finished = True
            continueRoutine = False
  Routine inconciente_question
    TextComponent text_2
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [time (s)] = 0.0
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      text:
        Cual es el más CARO?
        flechita IZQ o DER
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_5
      image [set every repeat] = $imagen
      pos = (0, 0.5)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $time_to_show_tiny_stimulus
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  Routine autoevaluacion
    TextComponent text_3
      font = consolas
      letterHeight = 0.05
      pos [set every repeat] = $screen_pos
      startVal [time (s)] = 0.0
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      text:
        Del 0 al 9, cuan experto en estimar precios te consideras?

        (Presioná un número del 0 al 9)
    KeyboardComponent key_resp_2
      allowedKeys = '0','1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials_5 loopType="TrialHandler"
    conditions = [OrderedDict([('changuito_time_to_show', 8), ('time_to_think', 14), ('time_to_play', 14), ('total_items', 30)])]
    conditionsFile = global_settings.csv
    loopType = sequential
    nReps = 1
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    Routine Instrucciones
    Routine JuegoColores
    LoopInitiator nback_train loopType="TrialHandler"
      Selected rows = $nback_training
      conditionsFile = ColourTest2.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('colourtest', 'White'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Red'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Magenta'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Cyan'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Magenta'), ('corresp', ['space'])]),
        OrderedDict([('colourtest', 'Green'), ('corresp', None)]),
        OrderedDict([('colourtest', 'White'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Green'), ('corresp', ['space'])]),
        OrderedDict([('colourtest', 'Blue'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Green'), ('corresp', ['space'])]),
        OrderedDict([('colourtest', 'White'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Green'), ('corresp', None)]),
        OrderedDict([('colourtest', 'White'), ('corresp', ['space'])]),
        OrderedDict([('colourtest', 'Red'), ('corresp', None)]),
        OrderedDict([('colourtest', 'White'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Yellow'), ('corresp', None)]),
        OrderedDict([('colourtest', 'White'), ('corresp', ['space'])]),
        OrderedDict([('colourtest', 'Magenta'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Cyan'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Blue'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Magenta'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Blue'), ('corresp', ['space'])]),
        OrderedDict([('colourtest', 'Cyan'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Yellow'), ('corresp', None)]),
        OrderedDict([('colourtest', 'Cyan'), ('corresp', None)])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
      Routine N_back
    LoopTerminator nback_train
    LoopInitiator treatment_order loopType="TrialHandler"
      conditionsFile = $"treatment_order_"+expInfo['group']+".csv" 
      loopType = sequential
      nReps = 1
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      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $random(1)*$total_items
        conditionsFile = conditions.csv
        loopType = random
        nReps = $inmediato
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        conditions:
          [OrderedDict([('imagen', './completed_changuitos/montage_wvllr.jpg'), ('correcta', 'right')]),
          OrderedDict([('imagen', './completed_changuitos/montage_yjtih.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_kgcxn.jpg'), ('correcta', 'right')]),
          OrderedDict([('imagen', './completed_changuitos/montage_qnpma.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_oufqt.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_pbapq.jpg'), ('correcta', 'right')]),
          OrderedDict([('imagen', './completed_changuitos/montage_haqjy.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_ghexq.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_zvzjb.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_jxier.jpg'), ('correcta', 'right')]),
          OrderedDict([('imagen', './completed_changuitos/montage_hexzx.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_vhdpt.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_rzljp.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_jefwa.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_hzfia.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_uoshx.jpg'), ('correcta', 'left')])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
        Routine Inmediato
      LoopTerminator trials
      LoopInitiator trials_2 loopType="TrialHandler"
        Selected rows = $random(1)*$total_items
        conditionsFile = conditions.csv
        loopType = random
        nReps = $consciente
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        conditions:
          [OrderedDict([('imagen', './completed_changuitos/montage_wvllr.jpg'), ('correcta', 'right')]),
          OrderedDict([('imagen', './completed_changuitos/montage_yjtih.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_kgcxn.jpg'), ('correcta', 'right')]),
          OrderedDict([('imagen', './completed_changuitos/montage_qnpma.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_oufqt.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_pbapq.jpg'), ('correcta', 'right')]),
          OrderedDict([('imagen', './completed_changuitos/montage_haqjy.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_ghexq.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_zvzjb.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_jxier.jpg'), ('correcta', 'right')]),
          OrderedDict([('imagen', './completed_changuitos/montage_hexzx.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_vhdpt.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_rzljp.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_jefwa.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_hzfia.jpg'), ('correcta', 'left')]),
          OrderedDict([('imagen', './completed_changuitos/montage_uoshx.jpg'), ('correcta', 'left')])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
        Routine Consciente
      LoopTerminator trials_2
      LoopInitiator trials_3 loopType="TrialHandler"
        Selected rows = $random(1)*$total_items
        conditionsFile = conditions.csv
        loopType = random
        nReps = $inconsciente
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        conditions:
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        Routine Inconsciente
        LoopInitiator trials_4 loopType="TrialHandler"
          Selected rows = $nback_slice
          conditionsFile = ColourTest2.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
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          Routine nback_real
        LoopTerminator trials_4
        Routine inconciente_question
      LoopTerminator trials_3
    LoopTerminator treatment_order
    Routine Test
    Routine Test_price
    Routine autoevaluacion
  LoopTerminator trials_5
